PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001', 'dominant_hand': "'right','left'"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = ClickOnly
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine prepareExp
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    CodeComponent codePrepareExp
      Code Type = Py
      Before Experiment:
        import random
        import numpy as np
        import itertools

        """ For sampling """
        class SimplePerturbationLoader:
            def __init__(self):
                # create stimulus samples
                self.stim_ranges = [
                    [12, 36],
                    [54, 78],
                    [102, 126],
                    [144, 168],
                ]
                self.n_sample_per_range = 5
                self.stim_samples = [
                    np.linspace(s[0], s[1], self.n_sample_per_range)
                    for s in self.stim_ranges]

                # create perturbation sampling range
                self.perturbations = [
                    (1, 1), # quadrant 1
                    (-1, 1), # quadrant 2
                    (-1, -1), # quadrant 3
                    (1, -1), # quadrant 4
                ]

                # set other configurations
                self.jittering = 2

            def stim_add_noise(self, xs):
                noise = np.random.uniform(low=-1, high=1, size=xs.shape) * self.jittering
                return xs + noise

            def generate_one_batch_stims(self):
                stim_list = np.concatenate(self.stim_samples)
                # add some noise
                sampled_stims = self.stim_add_noise(stim_list)
                # combination
                combinations = list(itertools.product(sampled_stims, self.perturbations))
                random.shuffle(combinations)
                return combinations

        """ For calibration """
        class DefaultFixation:
            def __init__(self, window):
                self.fixation = visual.ShapeStim(
                    win=window, vertices='cross',
                    size=(0.06, 0.06), lineWidth=1,
                    lineColor='white', fillColor='white')

                self.setAutoDraw(True)

            def setAutoDraw(self, autoDraw):
                self.fixation.setAutoDraw(autoDraw)
      Begin Experiment:
        # set configrations
        N_REPEATS = 4
        N_REPEAT_BLOCK = 40 # FOR DEBUGGING, 4 will be decent?
        STIM_LENGTH = 0.75
        DELAY_LENGTH = 5

        # read exp settings
        dominant_hand = expInfo['dominant_hand']
        is_right_handed = dominant_hand == 'right'

        # add managers
        stim_perturb_loader = SimplePerturbationLoader()

        # some configuration for display
        PATCH_RADIUS = 0.16
      Begin Routine:
        # now generate the stimuli and perturbations
        all_repeats_stims = []
        BLOCK_SIZE = 0
        for _ in range(N_REPEATS):
            # generate stims and perturbations
            stim_perturb_list = stim_perturb_loader.generate_one_batch_stims()
            # cut into blocks
            assert len(stim_perturb_list) % N_REPEAT_BLOCK == 0
            BLOCK_SIZE = len(stim_perturb_list) // N_REPEAT_BLOCK
            for i in range(N_REPEAT_BLOCK):
                all_repeats_stims.append(stim_perturb_list[i*BLOCK_SIZE:(i+1)*BLOCK_SIZE])

        N_BLOCKS = len(all_repeats_stims)

        # also determine the type of perturbation (overt vs covert)
        PERTURB_TYPE_CANDIDATES = ['overt', 'covert']
        N_PERTURB_TYPES = len(PERTURB_TYPE_CANDIDATES)
        all_perturb_types = (PERTURB_TYPE_CANDIDATES *
            ((N_BLOCKS + N_PERTURB_TYPES - 1) // N_PERTURB_TYPES))[:N_BLOCKS]

        logging.info(N_BLOCKS)
  Routine Display
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    CodeComponent codeDisplay
      Code Type = Py
      Before Experiment:
        # define the function to display the stimuli
        def funcDrawStim(window, ori, loc, radius):
            # ori: 0-180 (degrees)
            # loc: position of the grating
            grating = visual.GratingStim(
                window, tex='sin', mask='gauss',
                sf=5.0, size=radius*2,
                ori=ori, pos=loc)
            grating.autoDraw = True
            return grating
      Begin Routine:
        stim_deg = cur_block_stim_perturbs[cur_trial_i][0]
        stim_obj = funcDrawStim(win, stim_deg, [0, 0], PATCH_RADIUS)
        thisExp.addData('stim', stim_deg)
      End Routine:
        stim_obj.setAutoDraw(False)
    TextboxComponent textDisplayPlaceholder
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = STIM_LENGTH
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  Routine Delay
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    KeyboardComponent keyDelay
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = DELAY_LENGTH
      store = nothing
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    CodeComponent codeDelay
      Code Type = Py
      Before Experiment:
        """ For generating perturbations """
        class SinglePerturbItemManager:
            def __init__(self, win, item_type):
                self.perturb_scale_range = [0.1, 0.25]
                self.item_size = 0.05

                # load resources
                if item_type == 'landolt':
                    self.has_ori = True
                    self.img = visual.ImageStim(
                        win, image='resources/landolt_white.png',
                        pos=(0, 0),
                        ori=0,
                        size=(self.item_size, self.item_size))
                elif item_type == 'circle':
                    self.has_ori = False
                    self.img = visual.Circle(
                        win, radius=self.item_size/2,
                        pos=(0, 0),
                        lineColor='white',
                        fillColor='white'
                    )
                else:
                    raise NotImplementedError

            def generate_perturb_position(self, perturb_code):
                perturb_center = np.random.uniform(
                    self.perturb_scale_range[0],
                    self.perturb_scale_range[1],
                    size=2
                ) * np.array(perturb_code) # center of perturbation
                return perturb_center

            def move(self, perturb_code):
                ## position
                center = self.generate_perturb_position(perturb_code)
                perturb_info = {
                    'pos': center,
                    'radius': self.item_size/2,
                }
                self.img.pos = center

                ## rotation
                if self.has_ori:
                    rotation = np.random.randint(10, 170) * (np.random.randint(2)+1) # avoid ambiguous
                    self.img.ori = rotation
                    perturb_info['ori'] = rotation

                return self.img, perturb_info

        class PerturbItemManager:
            def __init__(self, win):
                # a few things needed
                self.landolt = SinglePerturbItemManager(win, 'landolt')
                self.circle = SinglePerturbItemManager(win, 'circle')
                self.center = SinglePerturbItemManager(win, 'circle')
                self.reset()

            def reset(self):
                self.center.move([0, 0])
                self.active_items = [self.center,]

            def update(self, is_task, perturb_code):
                draw_item, move_info = None, None
                self.reset()
                if perturb_code is not None:
                    if is_task: # overt movement
                        draw_item, move_info = self.landolt.move(perturb_code)
                    else: # covert movement
                        draw_item, move_info = self.circle.move(perturb_code)
                else:
                    if is_task: # judgement at center
                        draw_item, move_info = self.landolt.move([0, 0])
                    else:
                        draw_item, move_info = self.center.move([0, 0])
                self.active_items = [draw_item,]
                return move_info

            def draw(self):
                for item in self.active_items:
                    item.draw()


        class PerturbSchedueler:
            def __init__(self, win, timing_settings, delay_length):
                self.perturb_item_manager = PerturbItemManager(win)
                self.n_perturb = timing_settings['n_perturb']
                self.n_judge = timing_settings['n_judge']
                self.per_t_min, self.per_t_max = timing_settings['duration']
                self.earliest, self.latest = timing_settings['timing']
                self.min_gap = timing_settings['min_gap']
                self.delay_length = delay_length

                self.clear_schedule()

            def clear_schedule(self):
                # reset schedule
                self.schedule = None
                self.records = None
                self.current_id = -1
                self.last_record_id = -1
                self.on = False
                self.require_input = False
                self.perturb_type = None

            def reset_schedule(self, perturb_type):
                self.clear_schedule()
                self.perturb_item_manager.reset()
                self.schedule = []
                self.records = {'judge': [], 'perturb': []}

                # determine duration of each epochs
                assert self.delay_length >= self.latest
                self.perturb_type = perturb_type
                if self.perturb_type == 'covert':
                    self.n_events = self.n_perturb + self.n_judge
                elif self.perturb_type == 'overt':
                    assert self.n_perturb == self.n_judge
                    self.n_events = self.n_perturb
                assert (
                    self.n_events * self.per_t_max +
                    (self.n_events-1) * self.min_gap +
                    self.earliest) <= self.latest
                durations = np.random.uniform(
                    self.per_t_min, self.per_t_max,
                    size=self.n_events
                )

                # sample the start points
                reduced_duration = self.latest - self.earliest - np.sum(
                    durations) - (self.n_events-1) * self.min_gap
                starts = np.random.uniform(0, reduced_duration, size=self.n_events)
                starts = np.sort(starts)

                # get time start end for each
                t_overhead = self.earliest
                for i in range(self.n_events):
                    start_t = t_overhead + starts[i]
                    end_t = start_t + durations[i]
                    self.schedule.append([start_t, end_t])
                    t_overhead += self.min_gap
                    t_overhead += end_t - start_t

                # finally, decided which is task and which is perturb
                self.perturb_type_codes = [] # each pair: is_task + is_perturb
                if self.perturb_type == 'overt':
                    self.perturb_type_codes += [
                        {'is_task': True, 'is_perturb': True} for _ in range(self.n_events)]
                elif self.perturb_type == 'covert':
                    self.perturb_type_codes += [
                        {'is_task': False, 'is_perturb': True} for _ in range(self.n_perturb)]
                    self.perturb_type_codes += [
                        {'is_task': True, 'is_perturb': False} for _ in range(self.n_judge)]
                    random.shuffle(self.perturb_type_codes)

                # other stuffs
                self.current_id = 0

            def check_schedule(self, t, perturb_code):
                # return the event the current t is in
                # check whether it's on or off
                n_total = len(self.schedule)
                if self.current_id < n_total:
                    epoch = self.schedule[self.current_id]
                    if t < epoch[0]:
                        self.on = False
                    elif t > epoch[1]:
                        self.on = False
                        while self.current_id < n_total-1 and t > epoch[1]:
                            # find the next match
                            self.current_id += 1
                            epoch = self.schedule[self.current_id]
                    else:
                        self.on = True
                else:
                    self.on = False

                if self.on:
                    # currently something is happening
                    current_perturb_type_codes = self.perturb_type_codes[
                            self.current_id]
                    if self.current_id > self.last_record_id:
                        # there is something not plotted or recorded yet --> update it
                        is_task = current_perturb_type_codes['is_task']
                        is_perturb = current_perturb_type_codes['is_perturb']
                        perturb_code = perturb_code if is_perturb else None
                        update_info = self.perturb_item_manager.update(
                            is_task = is_task,
                            perturb_code = perturb_code,
                        )
                        # append time info
                        update_info['tstart'] = t # use actual start time
                        update_info['tend'] = self.schedule[self.current_id][1]
                        # send to records
                        if is_task:
                            self.records['judge'].append(update_info.copy())
                        if is_perturb:
                            self.records['perturb'].append(update_info.copy())
                        # update all states
                        self.last_record_id = self.current_id
                        self.require_input = is_task

                else: # just give the center fixation
                    self.perturb_item_manager.update(
                        is_task = False,
                        perturb_code = None,
                    )
                    self.require_input = False

                self.perturb_item_manager.draw()


            def check_input(self, t, key_input, key_map):
                feedback = None
                if self.require_input:
                    if key_input: # there is some input...
                        # only care if input is required
                        ans_is_left = self.records['judge'][-1]['ori'] > 180
                        ## check the key
                        last_key = key_input[-1].name
                        key_is_left = last_key.lower() == key_map[0]
                        key_is_correct = key_is_left == ans_is_left
                        ## update the result
                        self.records['judge'][-1]['ans_correct'] = key_is_correct
                        self.records['judge'][-1]['rt'] = t - self.records['judge'][-1]['tstart']
                        ## end it
                        self.on = False
                        self.require_input = False
                        self.current_id += 1
                        ## prepare feedback
                        feedback = key_is_correct
                    else:
                        # TODO: ignore it?
                        pass
                return feedback
      Begin Experiment:
        # a few configurations
        ## number of perturbations during the delay
        PERTURB_TIMING_SETTINGS = {
            'n_perturb': 1,
            'n_judge': 1,
            'duration': (1.0, 1.5),
            'timing': (0.5, 4.5),
            'min_gap': 0.1,
        }
        perturb_scheduler = PerturbSchedueler(
            win=win,
            timing_settings=PERTURB_TIMING_SETTINGS,
            delay_length=DELAY_LENGTH)

        ## left / right hand mapping
        left_hand_keys = ['j', 'k'] # for left-handed
        right_hand_keys = ['a', 's'] # for right-handed
        assert len(left_hand_keys) == len(right_hand_keys)
        resp_key_map = right_hand_keys if is_right_handed else left_hand_keys

        ## load sound feedback
        correct_sound = sound.Sound('bleep.wav')
        wrong_sound   = sound.Sound('buzz.wav')
      Begin Routine:
        # set up the timing of displaying perturbations
        perturb_scheduler.reset_schedule(cur_block_perturb_type)

        # get stim perturb codes
        perturb_code = cur_block_stim_perturbs[cur_trial_i][1]

        # save info
        thisExp.addData("perturb_code_x", perturb_code[0])
        thisExp.addData("perturb_code_y", perturb_code[1])
        thisExp.addData("perturb_type", cur_block_perturb_type)
      Each Frame:
        # check schedule
        perturb_scheduler.check_schedule(t, perturb_code)

        if perturb_scheduler.require_input:
            # read the keyboard input
            keys = keyDelay.getKeys(resp_key_map)
            perturb_feedback = perturb_scheduler.check_input(t, keys, resp_key_map)
            if perturb_feedback is not None:
                # there are some correct/incorrect feedback
                correct_sound.stop()
                wrong_sound.stop()
                if perturb_feedback:
                    correct_sound.play()
                else:
                    wrong_sound.play()
      End Routine:
        # save all records
        for record_type in ['judge', 'perturb']:
            records = perturb_scheduler.records[record_type]
            for i, record in enumerate(records):
                for k,v in record.items():
                    thisExp.addData(f"{record_type}_{i}_{k}", v)
    TextboxComponent textDelayPlaceholder
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = DELAY_LENGTH 
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  Routine OriTest
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  Routine PreTrial
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    CodeComponent codePretrial
      Code Type = Py
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      Begin Routine:
        cur_trial_i = trialLoop.thisN
        cur_trial_stim_perturbs = cur_block_stim_perturbs[cur_trial_i]
  Routine postTrial
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  Routine PreBlock
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    CodeComponent codePreBlock
      Code Type = Py
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      Begin Routine:
        block_id = blockLoop.thisN
        cur_block_stim_perturbs = all_repeats_stims[blockLoop.thisN]
        cur_block_perturb_type = all_perturb_types[blockLoop.thisN]
  Routine AfterMask
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    CodeComponent codeAfterMask
      Code Type = Py
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      Before Experiment:
        class NoisePatch:
            def __init__(self, window, loc, display_r):
                noise_img_path = "resources/noise.png"
                noise_ori = 180 * random.random()
                self.obj = visual.ImageStim(
                    win=window, image=noise_img_path,
                    ori=noise_ori, size=2*display_r, pos=loc)

                self.setAutoDraw(True)

            def setAutoDraw(self, autoDraw):
                self.obj.setAutoDraw(autoDraw)
Flow
  Routine prepareExp
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = N_BLOCKS
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    Routine PreBlock
    LoopInitiator trialLoop loopType="TrialHandler"
      loopType = sequential
      nReps = BLOCK_SIZE
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      Routine PreTrial
      Routine Display
      Routine AfterMask
      Routine Delay
      Routine OriTest
      Routine postTrial
    LoopTerminator trialLoop
  LoopTerminator blockLoop
